instance = openMHA9-unaided

nchannels_in = 4
srate = 48000

mhalib = db
mha.fragsize = 48

mha.plugin_name = transducers

mha.transducers.calib_in.peaklevel = [130 130 130 130]
mha.transducers.calib_in.fir = [[]]
mha.transducers.calib_out.peaklevel = [130 130]
mha.transducers.calib_out.fir = [[-0.000335711509838 0.000340014554089 0.000871873379112 -0.006666789646924 0.001396629314323 0.002540386293394 -0.018580343902919 0.032624220203320 0.059790583344116 -0.009658296689045 0.037186098110109 0.047175913814720 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0.000038720889045];[-0.000340989779800 -0.000254141888885 0.001848370737566 -0.006425478927774 -0.002314803552332 0.006744393603991 -0.019215031203602 0.016125401195827 0.062417556813611 -0.003556915421205 0.023720696269680 0.064457467616615 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0.000026525915278]]
mha.transducers.calib_out.softclip.tau_attack = 0.002
mha.transducers.calib_out.softclip.tau_decay = 0.005
mha.transducers.calib_out.softclip.threshold = 0.6
mha.transducers.calib_out.softclip.slope = 0.5
mha.transducers.calib_out.softclip.tau_clip = 1
mha.transducers.calib_out.softclip.max_clipped = 1
mha.transducers.calib_out.do_clipping = no

mha.transducers.plugin_name = mhachain
mha.transducers.mhachain.algos = [adm overlapadd]

mha.transducers.mhachain.adm.front_channels = [0 1]
mha.transducers.mhachain.adm.rear_channels = [2 3]
mha.transducers.mhachain.adm.distances = [0.0156 0.0156]
mha.transducers.mhachain.adm.lp_order = 128
mha.transducers.mhachain.adm.decomb_order = 128
mha.transducers.mhachain.adm.bypass = 0

mha.transducers.mhachain.overlapadd.fftlen = 384
mha.transducers.mhachain.overlapadd.wnd.type = hanning
mha.transducers.mhachain.overlapadd.wnd.user = []
mha.transducers.mhachain.overlapadd.wnd.len = 192
mha.transducers.mhachain.overlapadd.wnd.pos = 0.5
mha.transducers.mhachain.overlapadd.wnd.exp = 1
mha.transducers.mhachain.overlapadd.zerownd.type = rect
mha.transducers.mhachain.overlapadd.zerownd.user = []

mha.transducers.mhachain.overlapadd.plugin_name = mhachain

mha.transducers.mhachain.overlapadd.mhachain.algos = [fftfilterbank dc combinechannels]

mha.transducers.mhachain.overlapadd.mhachain.fftfilterbank.unit = Hz
mha.transducers.mhachain.overlapadd.mhachain.fftfilterbank.f = [177 297 500 841 1414 2378 4000 6727 11314]
mha.transducers.mhachain.overlapadd.mhachain.fftfilterbank.fscale = log
mha.transducers.mhachain.overlapadd.mhachain.fftfilterbank.ovltype = rect
mha.transducers.mhachain.overlapadd.mhachain.fftfilterbank.ftype = center

mha.transducers.mhachain.overlapadd.mhachain.dc.gtdata = [[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0];[0.0 0.0]]
mha.transducers.mhachain.overlapadd.mhachain.dc.gtmin = [0]
mha.transducers.mhachain.overlapadd.mhachain.dc.gtstep = [1]
mha.transducers.mhachain.overlapadd.mhachain.dc.tau_attack = [0.02]
mha.transducers.mhachain.overlapadd.mhachain.dc.tau_decay = [0.1]
mha.transducers.mhachain.overlapadd.mhachain.dc.fb = fftfilterbank
mha.transducers.mhachain.overlapadd.mhachain.dc.chname = fftfilterbank_nchannels

mha.transducers.mhachain.overlapadd.mhachain.combinechannels.outchannels = 2

